<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFiles">
          <io:Path>C:\Users\taunsquared\Dropbox\SurprisingMinds\SurprisingMinds-Stimuli\automated</io:Path>
          <io:SearchPattern>*.avi</io:SearchPattern>
          <io:SearchOption>AllDirectories</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Filename</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>@returns(str)
def process(value):
  global output
  L = len(value)-4
  output = value[0:L] + "_LuminancePerFrame.csv"
  return output</scr:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Filename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>C:\Users\taunsquared\Dropbox\SurprisingMinds\SurprisingMinds-Stimuli\automated\Calibration.avi</cv:FileName>
                <cv:PlaybackRate>0</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\taunsquared\Dropbox\SurprisingMinds\SurprisingMinds-Stimuli\automated\Calibration_LuminancePerFrame.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:Selector>it</io:Selector>
              <io:CompatibilityMode>true</io:CompatibilityMode>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>